PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Seq2a_2
  logging level = debug
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Routines
  Routine INIT
    CodeComponent initialization
      Code Type = Py
      Before Experiment:
        ## before everything starts, import data from excell
        import xlrd
        import os
        ## Input file (excell output from MATLAB)
        MATLABoutput_Params = os.path.relpath('C:\Seq2a_PsPy\Seq2a_test_noblanks.xlsx')
        ## From 'xlrd':funcs to open the workbook & sheet we want
        init_book = xlrd.open_workbook(MATLABoutput_Params)

        init01_sheet, init02_sheet = init_book.sheet_by_index(0), init_book.sheet_by_index(1)
        init03_sheet, init04_sheet = init_book.sheet_by_index(2), init_book.sheet_by_index(3)

        for rowx in range(1,9):
            row = init01_sheet.row_values(rowx)
            run_1.append(row[1]),       block_1.append(row[2])
            trial_1.append(row[3]),     pos_1.append(row[8])
            taskidx_1.append(row[9]),   stimidx_1.append(row[10])
            corrresp_1.append(row[11]), color_1.append(row[22])
            shape_1.append(row[23]),    size_1.append(row[24])
            print(run_1)
        for rowx in range(1,9):
            row = init02_sheet.row_values(rowx)
            run_2.append(row[1]),       block_2.append(row[2])
            trial_2.append(row[3]),     pos_2.append(row[8])
            taskidx_2.append(row[9]),   stimidx_2.append(row[10])
            corrresp_2.append(row[11]), color_2.append(row[22])
            shape_2.append(row[23]),    size_2.append(row[24])
            print(run_2)
        for rowx in range(1,13):
            row = init03_sheet.row_values(rowx)
            run_3.append(row[1]),       block_3.append(row[2])
            trial_3.append(row[3]),     pos_3.append(row[8])
            taskidx_3.append(row[9]),   stimidx_3.append(row[10])
            corrresp_3.append(row[11]), color_3.append(row[22])
            shape_3.append(row[23]),    size_3.append(row[24])
        for rowx in range(1,511):
            row = init04_sheet.row_values(rowx)
            run_4.append(row[1]),       block_4.append(row[2])
            trial_4.append(row[3]),     pos_4.append(row[8])
            taskidx_4.append(row[9]),   stimidx_4.append(row[10])
            corrresp_4.append(row[11]), color_4.append(row[22])
            shape_4.append(row[23]),    size_4.append(row[24])
      Begin Experiment:
        CurrentSect = 0
  Routine TaskTrain_Explainer
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        CurrentSect = 1 # id for this section
        sect_corr_ideal  = 8 # max number of correct responses
        total_corr_ideal  = 8
    TextComponent TT_Script
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        Training (1/3) : Task Structure

        First, we will practice the decision & response component of the task.

        You will be presented with an object, and should report the COLOR or SHAPEof the object.
        A prompt at the top of the screen will tell you which decision to make for the current object.
        You will respond primarily with the (J) and (K) keys; please do not take your hand off the keyboard during the task.

        To Begin:
        •  Please place your right hand on the J, K, L, and semicolon ( ; ) keys, with your index finger on the ( J ) key (as if you are typing).
        •  Each time an object appears, press the key corresponding to its color or shape (based on the prompt at the top of the screen)
        •  A cross appears between images; you can ignore this.

        Press the space bar when you are ready to begin
    KeyboardComponent TaskExplain_Resp
      allowedKeys = 'y','n','j','k','space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent retrain_text
      letterHeight = 0.1
      opacity [set every repeat] = $retrainCheck
      pos = (0, 10)
      startVal [time (s)] = 0.0
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      text:
                                           *** RETRAIN  ****
        If you see this text, you may have had trouble with the preceeding task. Please review the instructions, and take your time with the training sections.
  Routine SeqTrain_Explainer
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        CurrentSect = 2
        sect_corr_ideal  = 8
        total_corr_ideal  = 16
    TextComponent ST_Explainer
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Training (2/3) : Sequence Training

        In this section you will be shown a 4 item sequence of decisions; and will have to remember which decision to make about each shape.
        For example, you're given the sequence: 'COLOR', 'SHAPE', 'SHAPE', 'COLOR'.  When the task begins you would respond with the 'COLOR' of the first,
        followed by the SHAPE of the second, then the 'SHAPE' of the third, and so on. This will be the rule you follow until the end of the block.

        When the block ends, you will be presented with a question about the position of the next item in the sequence.
        For example: The block ended with 'COLOR', 'SHAPE', 'SHAPE',  then the correct response would be '4' because the block ended on the 3rd item in the sequence.
    KeyboardComponent ST_ExpResponse
      allowedKeys = 'y','n','j','k','space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent S2_retrain
      letterHeight = 0.1
      opacity [set every repeat] = $retrainCheck
      startVal [time (s)] = 0.0
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      text:
                                           *** RETRAIN  ****
        If you see this text, you may have had trouble with the preceeding task. Please review the instructions, and take your time with the training sections.
  Routine Seq_Practice_Explainer
    CodeComponent T3_seqPractice
      Code Type = Py
      Begin Routine:
        CurrentSect = 3
        sect_corr_ideal  = 12
        total_corr_ideal  = 28

        T3_color, T3_shape, T3_size = StimByIdx(stimidx_3)
        correct_resp        = AnswerKeyDecoder(corrresp_3)
      End Routine:
        last_color_prompt, last_shape_prompt = color_prompt_yn, shape_prompt_yn
        last_color, last_shape, last_size    = T3_color, T3_shape, T3_size

        if T3_resp.corr == 1: corr_count += 1
    KeyboardComponent key_resp
      allowedKeys = 'y','n','j','k','space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent SeqPractice_Explain
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent retrainText_3
      letterHeight = 0.1
      opacity [set every repeat] = $retrainCheck
      startVal [time (s)] = 0.0
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      text:
                                           *** RETRAIN  ****
        If you see this text, you may have had trouble with the preceeding task. Please review the instructions, and take your time with the training sections.
  Routine Task_Start_Explainer
    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        CurrentSect = 4
    TextComponent TaskStart_Explain
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Now we will start the experiment. The only difference from what you just practiced is that the blocks are longer (about 24 shapes).

        • Did you get lost at any point? If you can’t remember where you are in the sequence, just decide a place to start in the sequence and go from there. Try not to get flustered and don’t give up!
        • Every set of 4 blocks you will get a break. Feel free to stretch out. Press the space bar to continue when you are done taking a break.
        • There will be 5 sets of blocks total.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    TextComponent blankText
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine accuracy_check
    CodeComponent Accuracy_Check
      Code Type = Py
      Begin Routine:
        # check accuracy. if <80%, walk it back to the section they just did, by setting
        # the retrain loop in motion.

        # fancy version, of the form # 'Yes' if fruit == 'Apple' else 'No'
        if ( (1-(corr_count + 0.001)/(sect_corr_ideal + 0.001)) >= 0.2):
            CurrentSect -= 1
            retrainCheck = 1
  Routine Training_1
    CodeComponent T1_params
      Code Type = Py
      Before Experiment:
        # Task Training prompts
        # We need to toggle  reminder text for the stimuli in training section 1. Here,
        # the task_idx indicates which to use: 1= color, 2=shape. These are converted to
        # a 1|0 value for (color_prompt_yn, shape_prompt_yn), which the text objects use
        # as opacity values. 1 is visible, 0 invisible.
        def TaskPromptToggle(task_id):
            if str(task_id) == '1': colorYN, shapeYN = 1, 0
            else                  : colorYN, shapeYN = 0, 1
            return( colorYN, shapeYN )
        # Value Conversions; MATLAB idx to rgb, verticies, size
        # The MATLAB script handles our variables as 1's and 2's, but we need to do some
        # translating before psychopy can use our stimuli. we'll do this by using the
        # stimulus ids, and converting the unique color/shape/size params to something
        # psychopy expects to see. Key for below: stim_idx:(color,shape,size).
        # 1:(1,1,1) 2:(1,1,2) 3:(1,2,1) 4:(1,2,2)
        # 5:(2,1,1) 6:(2,1,2) 7:(2,2,1) 8:(2,2,2)
        def StimByIdx(stimulus_id):
            if   stimulus_id == 1: color_array, shape_array, size_array = [1,0,0], 40, 1
            elif stimulus_id == 2: color_array, shape_array, size_array = [1,0,0], 40, 2
            elif stimulus_id == 3: color_array, shape_array, size_array = [1,0,0],  4, 1
            elif stimulus_id == 4: color_array, shape_array, size_array = [1,0,0],  4, 2
            elif stimulus_id == 5: color_array, shape_array, size_array = [0,0,1], 40, 1
            elif stimulus_id == 6: color_array, shape_array, size_array = [0,0,1], 40, 2
            elif stimulus_id == 7: color_array, shape_array, size_array = [0,0,1],  4, 1
            else                 : color_array, shape_array, size_array = [0,0,1],  4, 2
            return(color_array, shape_array, size_array)

        # Answer Keys
        # the last thing we need is a way to decode the <corrresp> column. This holds
        # values from 1-4, which correspond to the 'j'->';' keys. Psychopy doesn't know
        # that though, so:
        corresp_dict = { '1' : 'j', '2' : 'k', '3' : 'l', '4' : ';' }
        # turn the INT into a string, for key matching
        def AnswerKeyDecoder(cor_idx):
            str_cor_idx  = str(cor_idx)
            correct_resp = corresp_dict[str_cor_idx]
            return(correct_resp)

        # Sequence ID translator
        # at the start of a new block, (training 2 and on) retrieve info for the current
        # sequence, and use it to toggle one of the 4 text prompts. from matlab, the
        # sequences are (1122, 1221, 2211, 2112) , where 1 = COLOR, and 2 = SHAPE

        Seq_Text_dict = { '1' : 'COLOR, COLOR, SHAPE, SHAPE',  # seqidx = 1: 1122
                          '2' : 'COLOR, SHAPE, SHAPE, COLOR',  # seqidx = 2: 1221
                          '3' : 'SHAPE, SHAPE, COLOR, COLOR',  # seqidx = 3: 2211
                          '4' : 'SHAPE, COLOR, COLOR, SHAPE' } # seqidx = 4: 2112

        def SeqPrompt(sequence_id):
            formatted_key = str(sequence_id)
            text_sequence = Seq_Text_dict[formatted_key]
            return(text_sequence)

        # internal tracking; used at the end of the block for accuracy
        corr_count = 0
      Begin Routine:
        # at the start of a Routine (in this case, a Trial), update stim & prompt params
        # using the converters we defined in the Before Experiment tab.

        color_prompt_yn, shape_prompt_yn = TaskPromptToggle(taskidx_1)

        T1_color, T1_shape, T1_size      = StimByIdx(stimidx_1)
        correct_resp             = AnswerKeyDecoder(corrresp_1)
      End Routine:
        # store the last trial params
        last_color_prompt, last_shape_prompt = color_prompt_yn, shape_prompt_yn
        last_color, last_shape, last_size    = T1_color, T1_shape, T1_size
    KeyboardComponent T1_resp
      allowedKeys = 'j','k'
      correctAns = $correct_resp
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
      syncScreenRefresh = False
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    PolygonComponent T1_Stim
      fillColor [set every repeat] = T1_color
      lineColor [set every repeat] = T1_color
      nVertices = T1_shape
      shape = regular polygon...
      size [set every repeat] = (0.5 * T1_size, 0.5 * T1_size)
      startVal [time (s)] = 0.0
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    TextboxComponent prompt_C
      bold = False
      editable = False
      letterHeight = 0.05
      opacity [set every repeat] = color_prompt_yn
      padding = None
      pos = (0, 10)
      startVal [time (s)] = 0.0
      text = COLOR
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    TextboxComponent prompt_S
      bold = False
      editable = False
      letterHeight = 0.05
      opacity [set every repeat] = shape_prompt_yn
      padding = None
      pos = (0, 10)
      startVal [time (s)] = 0.0
      text = SHAPE
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  Routine Training_2
    CodeComponent T2_params
      Code Type = Py
      Begin Routine:
        T2_color, T2_shape, T2_size   = StimByIdx(stimidx_2)
        correct_resp                  = AnswerKeyDecoder(corrresp_2)
      End Routine:
        last_color_prompt, last_shape_prompt = color_prompt_yn, shape_prompt_yn
        last_color, last_shape, last_size    = T2_color, T2_shape, T2_size
    KeyboardComponent T2_resp
      allowedKeys = 'j','k','l',';'
      correctAns = $corrresp_2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    PolygonComponent T2_stim
      fillColor [set every repeat] = $T2_color
      lineColor [set every repeat] = $T2_color
      nVertices = $T2_shape
      shape = regular polygon...
      size [set every repeat] = (0.5 * $T2_size , 0.5 * $T2_size)
      startVal [time (s)] = 0.0
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  Routine Training_3
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        T3_color, T3_shape, T3_size = StimByIdx(stimidx_3)
        correct_resp        = AnswerKeyDecoder(corrresp_3)
      End Routine:
        last_color_prompt, last_shape_prompt = color_prompt_yn, shape_prompt_yn
        last_color, last_shape, last_size    = T3_color, T3_shape, T3_size
    KeyboardComponent key_resp_2
      allowedKeys = 'j','k','l',';'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor [set every repeat] = $T3_color
      lineColor [set every repeat] = $T3_color
      nVertices = $T3_shape
      shape = regular polygon...
      size [set every repeat] = ((0.5 * $T3_size), (0.5 * $T3_size ))
      startVal [time (s)] = 0.0
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  Routine Test_1
    CodeComponent T4_stim
      Code Type = Py
      Begin Routine:
        T4_color, T4_shape, T4_size = StimByIdx(stimidx_4)
        correct_resp        = AnswerKeyDecoder(corrresp_4)
      End Routine:
        last_color_prompt, last_shape_prompt = color_prompt_yn, shape_prompt_yn
        last_color, last_shape, last_size    = T4_color, T4_shape, T4_size

        #seqPos += 1
    KeyboardComponent key_resp_test
      allowedKeys = 'j','k','l',';'
      correctAns = $corrresp
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = all keys
      storeCorrect = True
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    PolygonComponent polygon_test
      fillColor [set every repeat] = $T4_color
      lineColor [set every repeat] = $T4_color
      nVertices = $T4_shape
      shape = regular polygon...
      size [set every repeat] = (0.5 * $T4_size, 0.5 * $T4_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine Break_Prompt
    KeyboardComponent Break_Ender
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Break_Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        If you need a break, now is a good time to pause!

         Press space when you are ready to resume.
  Routine seq_pos_prompt
    CodeComponent SeqPos_check
      Code Type = Py
      Begin Routine:
        posAnswer = AnswerKeyDecoder(pos_4)
    KeyboardComponent seqPOS_answer
      allowedKeys = 'j','k','l',';'
      correctAns = $corrresp_1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent Test_POS_prompt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
                   What is the NEXT item in the sequence?




                                      1       2        3       4

                                      J       K         L        ;
  Routine End_Slide
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for participating!
  Routine SEQ_presentation
    CodeComponent get_seqText
      Code Type = Py
      Begin Routine:
        # using seqidx, toggle one of the text blocks containing the COLOR/SHAPE seq.
        DisplayText = SeqPrompt(seqidx_2)
    TextComponent Seq_Prompt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $DisplayText
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  Routine fix_cross
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine INIT
  LoopInitiator T1_retrain loopType="TrialHandler"
    loopType = sequential
    nReps = $retrainCheck
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    Routine TaskTrain_Explainer
    LoopInitiator T1_Trials loopType="TrialHandler"
      loopType = sequential
      nReps = 8
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      Routine fix_cross
      Routine Training_1
      Routine ITI
    LoopTerminator T1_Trials
    Routine accuracy_check
  LoopTerminator T1_retrain
  LoopInitiator T2_retrain loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = $retrainCheck
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    Routine SeqTrain_Explainer
    Routine SEQ_presentation
    LoopInitiator T2_Trials loopType="TrialHandler"
      loopType = sequential
      nReps = 8
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      Routine Training_2
      Routine ITI
    LoopTerminator T2_Trials
    Routine accuracy_check
  LoopTerminator T2_retrain
  LoopInitiator T3_retrain loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = $retrainCheck
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    Routine Seq_Practice_Explainer
    LoopInitiator T3_Blocks loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 3
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      Routine SEQ_presentation
      LoopInitiator T3_Trials loopType="TrialHandler"
        loopType = sequential
        nReps = 4
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        Routine Training_3
        Routine ITI
      LoopTerminator T3_Trials
    LoopTerminator T3_Blocks
    Routine accuracy_check
  LoopTerminator T3_retrain
  Routine Task_Start_Explainer
  LoopInitiator Test_Loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    LoopInitiator Test_Runloop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 4
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      Routine SEQ_presentation
      LoopInitiator Task_BlocksLoop loopType="TrialHandler"
        loopType = sequential
        nReps = $current_blocksize
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        Routine Test_1
        Routine ITI
      LoopTerminator Task_BlocksLoop
      Routine seq_pos_prompt
    LoopTerminator Test_Runloop
    Routine Break_Prompt
  LoopTerminator Test_Loop
  Routine End_Slide
